Fn = getTitle()
dir= getDirectory("image")
DirPath = dir + Fn
s = 1;
t = nSlices();
i = t/4;
startSlice1 = s;
endSlice1 = i;
startSlice2 = s+i;
endSlice2 = 2*i;
startSlice3 = s+(2*i);
endSlice3 = 3*i;
startSlice4 = s+(3*i);
endSlice4 = 4*i;
  open(DirPath);
  run("Make Substack...", "  slices="+startSlice1+"-"+endSlice1+"");
   open(DirPath);
   run("Make Substack...", "  slices="+startSlice2+"-"+endSlice2+"");
    open(DirPath);
  run("Make Substack...", "  slices="+startSlice3+"-"+endSlice3+"");
   open(DirPath);
   run("Make Substack...", "  slices="+startSlice4+"-"+endSlice4+"");
run("Merge Channels...", "c1=[Substack ("+startSlice1+"-"+endSlice1+")] c2=[Substack ("+startSlice2+"-"+endSlice2+")] c3=[Substack ("+startSlice3+"-"+endSlice3+")] c4=[Substack ("+startSlice4+"-"+endSlice4+")] create");
compositetitle=getTitle();
selectWindow(compositetitle);
//run("Channels Tool...");
Stack.setDisplayMode("color");
Stack.setChannel(1);
run("Red");
Stack.setChannel(2);
run("Green");
Stack.setChannel(3);
run("Magenta");
Stack.setChannel(4);
run("Cyan");
//run("Brightness/Contrast...");
//run("Channels Tool...");
Stack.setChannel(1);
run("Enhance Contrast", "saturated=0.35");
Stack.setChannel(2);
run("Enhance Contrast", "saturated=0.35");
Stack.setChannel(3);
run("Enhance Contrast", "saturated=0.35");
Stack.setChannel(4);
run("Enhance Contrast", "saturated=0.35");
run("Rotate 90 Degrees Right");
run("Properties...", "channels=4 slices="+i+" frames=1 unit=um pixel_width=0.3250000 pixel_height=0.3250000 voxel_depth=3.4000000");
